# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: CryoMech Pulse Tube

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: CryoMech_PulseTube

interface: None
address: COM1
startup: Do nothing



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

# Use specific TCIPIP socket port
; tcpip_specify_port: True

# TCPIP socket port
; tcpip_port: 7777

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
[Compressor Status]
datatype: COMBO
permission: READ
combo_def_1: Off
combo_def_2: On
get_cmd: compressor_on
group: General

[CPU Temp]
datatype: DOUBLE
unit: Celsius
permission: READ
get_cmd: cpu_temp
group: General

[Compressor Hours]
datatype: DOUBLE
unit: Hours
permission: READ
get_cmd: compressor_hours
group: General

[Motor Current]
datatype: DOUBLE
unit: Amps
permission: READ
get_cmd: motor_current
group: General

[Water In]
datatype: DOUBLE
unit: Celsius
permission: READ
get_cmd: temp_water_in
group: Temperatures

[Water Out]
datatype: DOUBLE
unit: Celsius
permission: READ
get_cmd: temp_water_out
group: Temperatures

[Helium]
datatype: DOUBLE
unit: Celsius
permission: READ
get_cmd: temp_helium
group: Temperatures

[Oil]
datatype: DOUBLE
unit: Celsius
permission: READ
get_cmd: temp_oil
group: Temperatures

[High Side]
datatype: DOUBLE
unit: PSIA
permission: READ
get_cmd: pressure_high_side
group: Pressures

[Low Side]
datatype: DOUBLE
unit: PSIA
permission: READ
get_cmd: pressure_low_side
group: Pressures

[Turn On]
datatype: BUTTON
permission: WRITE
set_cmd: turn_on
section: Control
group: Control

[Turn Off]
datatype: BUTTON
permission: WRITE
set_cmd: turn_off
section: Control
group: Control

