# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: HPD ADR

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: HPD_ADR
interface: None
startup: Do nothing



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

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
[Resistor]
datatype: COMBO
unit: Ohms
permission: WRITE
combo_def_1: Mag Cycle (0.99)
combo_def_2: S2-20, S1-15 (5.4)
combo_def_3: S2-20, S1-Open (8.3)
combo_def_4: S2-10, S1-15 (9.5)
combo_def_5: S2-10, S1-Open (25.7)
cmd_def_1: 0.99
cmd_def_2: 5.4
cmd_def_3: 8.3
cmd_def_4: 9.5
cmd_def_5: 25.7
def_value: Mag Cycle (0.99)

[Heat Switch Start Position]
datatype: COMBO
unit: Ohms
permission: WRITE
combo_def_1: Open
combo_def_2: Closed
cmd_def_1: 0
cmd_def_2: 1
def_value: Closed

[Start Delay Time]
datatype: DOUBLE
unit: hours
permission: WRITE
def_value: 0
low_lim: 0

[Mag Time]
datatype: DOUBLE
unit: minutes
permission: WRITE
def_value: 30
low_lim: 0

[Mag Current]
datatype: DOUBLE
unit: amps
permission: WRITE
def_value: 9.0
low_lim: 0
high_lim: 9.4

[Soak Time]
datatype: DOUBLE
unit: hours
permission: WRITE
def_value: 120
low_lim: 0

[Demag Time]
datatype: DOUBLE
unit: minutes
permission: WRITE
def_value: 90
low_lim: 0

[Run Cycle]
datatype: BUTTON
permission: WRITE
state_quant: Enable Run

[Enable Run]
datatype: BOOLEAN
permission: BOTH
def_value: False

[Abort Cycle]
datatype: BUTTON
permission: WRITE

[Status]
datatype: STRING
permission: READ
def_value: Ready to start

