##################################################################################
# This file is automatically generated!!!!!! DO NOT EDIT!!!!                     #
# Make changes to the .j2 template file, and then run "yasha <template_name>.j2" #
##################################################################################

[General settings]

# The name is shown in all the configuration windows
name: Lakeshore 372

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.

driver_path: Lakeshore_372
startup: Do nothing
interface: TCPIP
address: 192.168.1.2



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

model_id_1: MODEL372

model_str_1: Lakeshore 372

##############################################
# Scanner model installed: 3726  #
##############################################

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

# Use specific TCIPIP socket port
tcpip_specify_port: True

# TCPIP socket port
tcpip_port: 7777

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
# Channel A
[Temperature A]
unit: K
datatype: DOUBLE
permission: READ
get_cmd: KRDG? A
group: Control Input

[Resistance A]
unit: Ohm
datatype: DOUBLE
permission: READ
get_cmd: SRDG? A
group: Control Input

[Power A]
unit: W
datatype: DOUBLE
permission: READ
get_cmd: RDGPWR? A
group: Control Input

[Quadrature A]
unit: Ohms
datatype: DOUBLE
permission: READ
get_cmd: QRDG? A
group: Control Input

[Frequency A]
datatype: COMBO
permission: BOTH
combo_def_1: 9.8 Hz
cmd_def_1: 1
combo_def_2: 13.7 Hz
cmd_def_2: 2
combo_def_3: 16.2 Hz
cmd_def_3: 3
combo_def_4: 11.6 Hz
cmd_def_4: 4
combo_def_5: 18.2 Hz
cmd_def_5: 5
set_cmd: FREQ A,<*>
get_cmd: FREQ? A
group: Control Input

[Status A]
datatype: COMBO
permission: BOTH
combo_def_1: Disabled
combo_def_2: Enabled
cmd_def_1: 0
cmd_def_2: 1
group: Control Input

[Pause Time A]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 3
high_lim: 200
group: Control Input

[Calibration Curve A]
datatype: COMBO
permission: BOTH
combo_def_1: 0
cmd_def_1: 0
combo_def_2: 1
cmd_def_2: 1
combo_def_3: 2
cmd_def_3: 2
combo_def_4: 3
cmd_def_4: 3
combo_def_5: 4
cmd_def_5: 4
combo_def_6: 5
cmd_def_6: 5
combo_def_7: 6
cmd_def_7: 6
combo_def_8: 7
cmd_def_8: 7
combo_def_9: 8
cmd_def_9: 8
combo_def_10: 9
cmd_def_10: 9
combo_def_11: 10
cmd_def_11: 10
combo_def_12: 11
cmd_def_12: 11
combo_def_13: 12
cmd_def_13: 12
combo_def_14: 13
cmd_def_14: 13
combo_def_15: 14
cmd_def_15: 14
combo_def_16: 15
cmd_def_16: 15
combo_def_17: 16
cmd_def_17: 16
combo_def_18: 17
cmd_def_18: 17
combo_def_19: 18
cmd_def_19: 18
combo_def_20: 19
cmd_def_20: 19
combo_def_21: 20
cmd_def_21: 20
combo_def_22: 21
cmd_def_22: 21
combo_def_23: 22
cmd_def_23: 22
combo_def_24: 23
cmd_def_24: 23
combo_def_25: 24
cmd_def_25: 24
combo_def_26: 25
cmd_def_26: 25
combo_def_27: 26
cmd_def_27: 26
combo_def_28: 27
cmd_def_28: 27
combo_def_29: 28
cmd_def_29: 28
combo_def_30: 29
cmd_def_30: 29
combo_def_31: 30
cmd_def_31: 30
combo_def_32: 31
cmd_def_32: 31
combo_def_33: 32
cmd_def_33: 32
combo_def_34: 33
cmd_def_34: 33
combo_def_35: 34
cmd_def_35: 34
combo_def_36: 35
cmd_def_36: 35
combo_def_37: 36
cmd_def_37: 36
combo_def_38: 37
cmd_def_38: 37
combo_def_39: 38
cmd_def_39: 38
combo_def_40: 39
cmd_def_40: 39
combo_def_41: 40
cmd_def_41: 40
combo_def_42: 41
cmd_def_42: 41
combo_def_43: 42
cmd_def_43: 42
combo_def_44: 43
cmd_def_44: 43
combo_def_45: 44
cmd_def_45: 44
combo_def_46: 45
cmd_def_46: 45
combo_def_47: 46
cmd_def_47: 46
combo_def_48: 47
cmd_def_48: 47
combo_def_49: 48
cmd_def_49: 48
combo_def_50: 49
cmd_def_50: 49
combo_def_51: 50
cmd_def_51: 50
combo_def_52: 51
cmd_def_52: 51
combo_def_53: 52
cmd_def_53: 52
combo_def_54: 53
cmd_def_54: 53
combo_def_55: 54
cmd_def_55: 54
combo_def_56: 55
cmd_def_56: 55
combo_def_57: 56
cmd_def_57: 56
combo_def_58: 57
cmd_def_58: 57
combo_def_59: 58
cmd_def_59: 58
combo_def_60: 59
cmd_def_60: 59
set_cmd: INCRV A,<*>
get_cmd: INCRV? A
group: Control Input

[Temperature Coefficient A]
datatype: COMBO
permission: BOTH
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 1
cmd_def_2: 2
group: Control Input

[Excitation Value A]
datatype: COMBO
permission: BOTH
combo_def_1: 316 pA, 632 kOhm
cmd_def_1: 1
combo_def_2: 1 nA, 200 kOhm
cmd_def_2: 2
combo_def_3: 3.16 nA, 63.2 kOhm
cmd_def_3: 3
combo_def_4: 10 nA, 20 kOhm
cmd_def_4: 4
combo_def_5: 31.6 nA, 6.32 kOhm
cmd_def_5: 5
combo_def_6: 100 nA, 2 kOhm
cmd_def_6: 6
group: Control Input

[Autorange A]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: Current
combo_def_3: ROX 102B
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Control Input

[Excitation Status A]
datatype: COMBO
permission: BOTH
combo_def_1: On
combo_def_2: Off
cmd_def_1: 0
cmd_def_2: 1
group: Control Input

[Units A]
datatype: COMBO
permission: BOTH
combo_def_1: Kelvin
combo_def_2: Ohms
cmd_def_1: 1
cmd_def_2: 2
group: Control Input

[Filter Status A]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 0
group: Control Input

[Filter Settle Time A]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 0
high_lim: 200
group: Control Input

[Filter Window A]
datatype: DOUBLE
unit: percent
permission: BOTH
low_lim: 1
high_lim: 80
group: Control Input

[Active Channel]
datatype: COMBO
permission: BOTH
combo_def_1: Ch_1
cmd_def_1: 1
combo_def_2: Ch_2
cmd_def_2: 2
combo_def_3: Ch_3
cmd_def_3: 3
combo_def_4: Ch_4
cmd_def_4: 4
combo_def_5: Ch_5
cmd_def_5: 5
combo_def_6: Ch_6
cmd_def_6: 6
combo_def_7: Ch_7
cmd_def_7: 7
combo_def_8: Ch_8
cmd_def_8: 8
combo_def_9: Ch_9
cmd_def_9: 9
combo_def_10: Ch_10
cmd_def_10: 10
combo_def_11: Ch_11
cmd_def_11: 11
combo_def_12: Ch_12
cmd_def_12: 12
combo_def_13: Ch_13
cmd_def_13: 13
combo_def_14: Ch_14
cmd_def_14: 14
combo_def_15: Ch_15
cmd_def_15: 15
combo_def_16: Ch_16
cmd_def_16: 16
group: Measurement Input

#Active Channel values for convenience
[Temperature]
unit: K
datatype: DOUBLE
permission: READ
get_cmd: KRDG? <*>
group: Measurement Input

[Resistance]
unit: Ohm
datatype: DOUBLE
permission: READ
get_cmd: SRDG? <*>
group: Measurement Input

[Power]
unit: W
datatype: DOUBLE
permission: READ
get_cmd: RDGPWR? <*>
group: Measurement Input

[Quadrature]
unit: Ohms
datatype: DOUBLE
permission: READ
get_cmd: QRDG? <*>
group: Measurement Input

[Frequency]
datatype: COMBO
permission: BOTH
combo_def_1: 9.8 Hz
cmd_def_1: 1
combo_def_2: 13.7 Hz
cmd_def_2: 2
combo_def_3: 16.2 Hz
cmd_def_3: 3
combo_def_4: 11.6 Hz
cmd_def_4: 4
combo_def_5: 18.2 Hz
cmd_def_5: 5
set_cmd: FREQ 0,<*>
get_cmd: FREQ? 0
group: Measurement Input

[Temperature Ch_1]
unit: K
datatype: DOUBLE
permission: READ
get_cmd: KRDG? 1
group: Channel 1

[Resistance Ch_1]
unit: Ohm
datatype: DOUBLE
permission: READ
get_cmd: SRDG? 1
group: Channel 1

[Power Ch_1]
unit: W
datatype: DOUBLE
permission: READ
get_cmd: RDGPWR? 1
group: Channel 1

[Quadrature Ch_1]
unit: Ohms
datatype: DOUBLE
permission: READ
get_cmd: QRDG? 1
group: Channel 1

[Status Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: Disabled
combo_def_2: Enabled
cmd_def_1: 0
cmd_def_2: 1
group: Channel 1

[Dwell Time Ch_1]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 1
high_lim: 200
group: Channel 1

[Pause Time Ch_1]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 3
high_lim: 200
group: Channel 1

[Calibration Curve Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: 0
cmd_def_1: 0
combo_def_2: 1
cmd_def_2: 1
combo_def_3: 2
cmd_def_3: 2
combo_def_4: 3
cmd_def_4: 3
combo_def_5: 4
cmd_def_5: 4
combo_def_6: 5
cmd_def_6: 5
combo_def_7: 6
cmd_def_7: 6
combo_def_8: 7
cmd_def_8: 7
combo_def_9: 8
cmd_def_9: 8
combo_def_10: 9
cmd_def_10: 9
combo_def_11: 10
cmd_def_11: 10
combo_def_12: 11
cmd_def_12: 11
combo_def_13: 12
cmd_def_13: 12
combo_def_14: 13
cmd_def_14: 13
combo_def_15: 14
cmd_def_15: 14
combo_def_16: 15
cmd_def_16: 15
combo_def_17: 16
cmd_def_17: 16
combo_def_18: 17
cmd_def_18: 17
combo_def_19: 18
cmd_def_19: 18
combo_def_20: 19
cmd_def_20: 19
combo_def_21: 20
cmd_def_21: 20
combo_def_22: 21
cmd_def_22: 21
combo_def_23: 22
cmd_def_23: 22
combo_def_24: 23
cmd_def_24: 23
combo_def_25: 24
cmd_def_25: 24
combo_def_26: 25
cmd_def_26: 25
combo_def_27: 26
cmd_def_27: 26
combo_def_28: 27
cmd_def_28: 27
combo_def_29: 28
cmd_def_29: 28
combo_def_30: 29
cmd_def_30: 29
combo_def_31: 30
cmd_def_31: 30
combo_def_32: 31
cmd_def_32: 31
combo_def_33: 32
cmd_def_33: 32
combo_def_34: 33
cmd_def_34: 33
combo_def_35: 34
cmd_def_35: 34
combo_def_36: 35
cmd_def_36: 35
combo_def_37: 36
cmd_def_37: 36
combo_def_38: 37
cmd_def_38: 37
combo_def_39: 38
cmd_def_39: 38
combo_def_40: 39
cmd_def_40: 39
combo_def_41: 40
cmd_def_41: 40
combo_def_42: 41
cmd_def_42: 41
combo_def_43: 42
cmd_def_43: 42
combo_def_44: 43
cmd_def_44: 43
combo_def_45: 44
cmd_def_45: 44
combo_def_46: 45
cmd_def_46: 45
combo_def_47: 46
cmd_def_47: 46
combo_def_48: 47
cmd_def_48: 47
combo_def_49: 48
cmd_def_49: 48
combo_def_50: 49
cmd_def_50: 49
combo_def_51: 50
cmd_def_51: 50
combo_def_52: 51
cmd_def_52: 51
combo_def_53: 52
cmd_def_53: 52
combo_def_54: 53
cmd_def_54: 53
combo_def_55: 54
cmd_def_55: 54
combo_def_56: 55
cmd_def_56: 55
combo_def_57: 56
cmd_def_57: 56
combo_def_58: 57
cmd_def_58: 57
combo_def_59: 58
cmd_def_59: 58
combo_def_60: 59
cmd_def_60: 59
set_cmd: INCRV 1,<*>
get_cmd: INCRV? 1
group: Channel 1

[Temperature Coefficient Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 1
cmd_def_2: 2
group: Channel 1

[Excitation Mode Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
group: Channel 1

[Excitation Value Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: 2.00 uV, 1.00 pA
cmd_def_1: 1
combo_def_2: 6.32 uV, 3.16 pA
cmd_def_2: 2
combo_def_3: 20.0 uV, 10.0 pA
cmd_def_3: 3
combo_def_4: 63.2 uV, 31.6 pA
cmd_def_4: 4
combo_def_5: 200 uV, 100 pA
cmd_def_5: 5
combo_def_6: 623 uV, 316 pA
cmd_def_6: 6
combo_def_7: 2.00 mV, 1.00 nA
cmd_def_7: 7
combo_def_8: 6.32 mV, 3.16 nA
cmd_def_8: 8
combo_def_9: 20.0 mV, 10.0 nA
cmd_def_9: 9
combo_def_10: 63.2 mV, 31.6 nA
cmd_def_10: 10
combo_def_11: 200 mV, 100 nA
cmd_def_11: 11
combo_def_12: 632 mV, 316 nA
cmd_def_12: 12
combo_def_13: n/a, 1.00 uA
cmd_def_13: 13
combo_def_14: n/a, 3.16 uA
cmd_def_14: 14
combo_def_15: n/a, 10.0 uA
cmd_def_15: 15
combo_def_16: n/a, 31.6 uA
cmd_def_16: 16
combo_def_17: n/a, 100 uA
cmd_def_17: 17
combo_def_18: n/a, 316 uA
cmd_def_18: 18
combo_def_19: n/a, 1.00 mA
cmd_def_19: 19
combo_def_20: n/a, 3.16 mA
cmd_def_20: 20
combo_def_21: n/a, 10.0 mA
cmd_def_21: 21
combo_def_22: n/a, 31.6 mA
cmd_def_22: 22
group: Channel 1

[Excitation Status Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: On
combo_def_2: Off
cmd_def_1: 0
cmd_def_2: 1
group: Channel 1

[Units Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: Kelvin
combo_def_2: Ohms
cmd_def_1: 1
cmd_def_2: 2
group: Channel 1

[Autorange Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
group: Channel 1

[Range Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: 2.0 mOhm
cmd_def_1: 1
combo_def_2: 6.32 mOhm
cmd_def_2: 2
combo_def_3: 20.0 mOhm
cmd_def_3: 3
combo_def_4: 63.2 mOhm
cmd_def_4: 4
combo_def_5: 200 mOhm
cmd_def_5: 5
combo_def_6: 632 mOhm
cmd_def_6: 6
combo_def_7: 2.0 Ohm
cmd_def_7: 7
combo_def_8: 6.32 Ohm
cmd_def_8: 8
combo_def_9: 20.0 Ohm
cmd_def_9: 9
combo_def_10: 63.2 Ohm
cmd_def_10: 10
combo_def_11: 200 Ohm
cmd_def_11: 11
combo_def_12: 632 Ohm
cmd_def_12: 12
combo_def_13: 2.00 kOhm
cmd_def_13: 13
combo_def_14: 6.32 kOhm
cmd_def_14: 14
combo_def_15: 20.0 kOhm
cmd_def_15: 15
combo_def_16: 63.2 kOhm
cmd_def_16: 16
combo_def_17: 200 kOhm
cmd_def_17: 17
combo_def_18: 632 kOhm
cmd_def_18: 18
combo_def_19: 2.00 MOhm
cmd_def_19: 19
combo_def_20: 6.32 MOhm
cmd_def_20: 20
combo_def_21: 20.0 MOhm
cmd_def_21: 21
combo_def_22: 63.2 MOhm
cmd_def_22: 22
group: Channel 1

[Filter Status Ch_1]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 0
group: Channel 1

[Filter Settle Time Ch_1]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 0
high_lim: 200
group: Channel 1

[Filter Window Ch_1]
datatype: DOUBLE
unit: percent
permission: BOTH
low_lim: 1
high_lim: 80
group: Channel 1

[Temperature Ch_2]
unit: K
datatype: DOUBLE
permission: READ
get_cmd: KRDG? 2
group: Channel 2

[Resistance Ch_2]
unit: Ohm
datatype: DOUBLE
permission: READ
get_cmd: SRDG? 2
group: Channel 2

[Power Ch_2]
unit: W
datatype: DOUBLE
permission: READ
get_cmd: RDGPWR? 2
group: Channel 2

[Quadrature Ch_2]
unit: Ohms
datatype: DOUBLE
permission: READ
get_cmd: QRDG? 2
group: Channel 2

[Status Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: Disabled
combo_def_2: Enabled
cmd_def_1: 0
cmd_def_2: 1
group: Channel 2

[Dwell Time Ch_2]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 1
high_lim: 200
group: Channel 2

[Pause Time Ch_2]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 3
high_lim: 200
group: Channel 2

[Calibration Curve Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: 0
cmd_def_1: 0
combo_def_2: 1
cmd_def_2: 1
combo_def_3: 2
cmd_def_3: 2
combo_def_4: 3
cmd_def_4: 3
combo_def_5: 4
cmd_def_5: 4
combo_def_6: 5
cmd_def_6: 5
combo_def_7: 6
cmd_def_7: 6
combo_def_8: 7
cmd_def_8: 7
combo_def_9: 8
cmd_def_9: 8
combo_def_10: 9
cmd_def_10: 9
combo_def_11: 10
cmd_def_11: 10
combo_def_12: 11
cmd_def_12: 11
combo_def_13: 12
cmd_def_13: 12
combo_def_14: 13
cmd_def_14: 13
combo_def_15: 14
cmd_def_15: 14
combo_def_16: 15
cmd_def_16: 15
combo_def_17: 16
cmd_def_17: 16
combo_def_18: 17
cmd_def_18: 17
combo_def_19: 18
cmd_def_19: 18
combo_def_20: 19
cmd_def_20: 19
combo_def_21: 20
cmd_def_21: 20
combo_def_22: 21
cmd_def_22: 21
combo_def_23: 22
cmd_def_23: 22
combo_def_24: 23
cmd_def_24: 23
combo_def_25: 24
cmd_def_25: 24
combo_def_26: 25
cmd_def_26: 25
combo_def_27: 26
cmd_def_27: 26
combo_def_28: 27
cmd_def_28: 27
combo_def_29: 28
cmd_def_29: 28
combo_def_30: 29
cmd_def_30: 29
combo_def_31: 30
cmd_def_31: 30
combo_def_32: 31
cmd_def_32: 31
combo_def_33: 32
cmd_def_33: 32
combo_def_34: 33
cmd_def_34: 33
combo_def_35: 34
cmd_def_35: 34
combo_def_36: 35
cmd_def_36: 35
combo_def_37: 36
cmd_def_37: 36
combo_def_38: 37
cmd_def_38: 37
combo_def_39: 38
cmd_def_39: 38
combo_def_40: 39
cmd_def_40: 39
combo_def_41: 40
cmd_def_41: 40
combo_def_42: 41
cmd_def_42: 41
combo_def_43: 42
cmd_def_43: 42
combo_def_44: 43
cmd_def_44: 43
combo_def_45: 44
cmd_def_45: 44
combo_def_46: 45
cmd_def_46: 45
combo_def_47: 46
cmd_def_47: 46
combo_def_48: 47
cmd_def_48: 47
combo_def_49: 48
cmd_def_49: 48
combo_def_50: 49
cmd_def_50: 49
combo_def_51: 50
cmd_def_51: 50
combo_def_52: 51
cmd_def_52: 51
combo_def_53: 52
cmd_def_53: 52
combo_def_54: 53
cmd_def_54: 53
combo_def_55: 54
cmd_def_55: 54
combo_def_56: 55
cmd_def_56: 55
combo_def_57: 56
cmd_def_57: 56
combo_def_58: 57
cmd_def_58: 57
combo_def_59: 58
cmd_def_59: 58
combo_def_60: 59
cmd_def_60: 59
set_cmd: INCRV 2,<*>
get_cmd: INCRV? 2
group: Channel 2

[Temperature Coefficient Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 1
cmd_def_2: 2
group: Channel 2

[Excitation Mode Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
group: Channel 2

[Excitation Value Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: 2.00 uV, 1.00 pA
cmd_def_1: 1
combo_def_2: 6.32 uV, 3.16 pA
cmd_def_2: 2
combo_def_3: 20.0 uV, 10.0 pA
cmd_def_3: 3
combo_def_4: 63.2 uV, 31.6 pA
cmd_def_4: 4
combo_def_5: 200 uV, 100 pA
cmd_def_5: 5
combo_def_6: 623 uV, 316 pA
cmd_def_6: 6
combo_def_7: 2.00 mV, 1.00 nA
cmd_def_7: 7
combo_def_8: 6.32 mV, 3.16 nA
cmd_def_8: 8
combo_def_9: 20.0 mV, 10.0 nA
cmd_def_9: 9
combo_def_10: 63.2 mV, 31.6 nA
cmd_def_10: 10
combo_def_11: 200 mV, 100 nA
cmd_def_11: 11
combo_def_12: 632 mV, 316 nA
cmd_def_12: 12
combo_def_13: n/a, 1.00 uA
cmd_def_13: 13
combo_def_14: n/a, 3.16 uA
cmd_def_14: 14
combo_def_15: n/a, 10.0 uA
cmd_def_15: 15
combo_def_16: n/a, 31.6 uA
cmd_def_16: 16
combo_def_17: n/a, 100 uA
cmd_def_17: 17
combo_def_18: n/a, 316 uA
cmd_def_18: 18
combo_def_19: n/a, 1.00 mA
cmd_def_19: 19
combo_def_20: n/a, 3.16 mA
cmd_def_20: 20
combo_def_21: n/a, 10.0 mA
cmd_def_21: 21
combo_def_22: n/a, 31.6 mA
cmd_def_22: 22
group: Channel 2

[Excitation Status Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: On
combo_def_2: Off
cmd_def_1: 0
cmd_def_2: 1
group: Channel 2

[Units Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: Kelvin
combo_def_2: Ohms
cmd_def_1: 1
cmd_def_2: 2
group: Channel 2

[Autorange Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
group: Channel 2

[Range Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: 2.0 mOhm
cmd_def_1: 1
combo_def_2: 6.32 mOhm
cmd_def_2: 2
combo_def_3: 20.0 mOhm
cmd_def_3: 3
combo_def_4: 63.2 mOhm
cmd_def_4: 4
combo_def_5: 200 mOhm
cmd_def_5: 5
combo_def_6: 632 mOhm
cmd_def_6: 6
combo_def_7: 2.0 Ohm
cmd_def_7: 7
combo_def_8: 6.32 Ohm
cmd_def_8: 8
combo_def_9: 20.0 Ohm
cmd_def_9: 9
combo_def_10: 63.2 Ohm
cmd_def_10: 10
combo_def_11: 200 Ohm
cmd_def_11: 11
combo_def_12: 632 Ohm
cmd_def_12: 12
combo_def_13: 2.00 kOhm
cmd_def_13: 13
combo_def_14: 6.32 kOhm
cmd_def_14: 14
combo_def_15: 20.0 kOhm
cmd_def_15: 15
combo_def_16: 63.2 kOhm
cmd_def_16: 16
combo_def_17: 200 kOhm
cmd_def_17: 17
combo_def_18: 632 kOhm
cmd_def_18: 18
combo_def_19: 2.00 MOhm
cmd_def_19: 19
combo_def_20: 6.32 MOhm
cmd_def_20: 20
combo_def_21: 20.0 MOhm
cmd_def_21: 21
combo_def_22: 63.2 MOhm
cmd_def_22: 22
group: Channel 2

[Filter Status Ch_2]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 0
group: Channel 2

[Filter Settle Time Ch_2]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 0
high_lim: 200
group: Channel 2

[Filter Window Ch_2]
datatype: DOUBLE
unit: percent
permission: BOTH
low_lim: 1
high_lim: 80
group: Channel 2

[Temperature Ch_3]
unit: K
datatype: DOUBLE
permission: READ
get_cmd: KRDG? 3
group: Channel 3

[Resistance Ch_3]
unit: Ohm
datatype: DOUBLE
permission: READ
get_cmd: SRDG? 3
group: Channel 3

[Power Ch_3]
unit: W
datatype: DOUBLE
permission: READ
get_cmd: RDGPWR? 3
group: Channel 3

[Quadrature Ch_3]
unit: Ohms
datatype: DOUBLE
permission: READ
get_cmd: QRDG? 3
group: Channel 3

[Status Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: Disabled
combo_def_2: Enabled
cmd_def_1: 0
cmd_def_2: 1
group: Channel 3

[Dwell Time Ch_3]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 1
high_lim: 200
group: Channel 3

[Pause Time Ch_3]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 3
high_lim: 200
group: Channel 3

[Calibration Curve Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: 0
cmd_def_1: 0
combo_def_2: 1
cmd_def_2: 1
combo_def_3: 2
cmd_def_3: 2
combo_def_4: 3
cmd_def_4: 3
combo_def_5: 4
cmd_def_5: 4
combo_def_6: 5
cmd_def_6: 5
combo_def_7: 6
cmd_def_7: 6
combo_def_8: 7
cmd_def_8: 7
combo_def_9: 8
cmd_def_9: 8
combo_def_10: 9
cmd_def_10: 9
combo_def_11: 10
cmd_def_11: 10
combo_def_12: 11
cmd_def_12: 11
combo_def_13: 12
cmd_def_13: 12
combo_def_14: 13
cmd_def_14: 13
combo_def_15: 14
cmd_def_15: 14
combo_def_16: 15
cmd_def_16: 15
combo_def_17: 16
cmd_def_17: 16
combo_def_18: 17
cmd_def_18: 17
combo_def_19: 18
cmd_def_19: 18
combo_def_20: 19
cmd_def_20: 19
combo_def_21: 20
cmd_def_21: 20
combo_def_22: 21
cmd_def_22: 21
combo_def_23: 22
cmd_def_23: 22
combo_def_24: 23
cmd_def_24: 23
combo_def_25: 24
cmd_def_25: 24
combo_def_26: 25
cmd_def_26: 25
combo_def_27: 26
cmd_def_27: 26
combo_def_28: 27
cmd_def_28: 27
combo_def_29: 28
cmd_def_29: 28
combo_def_30: 29
cmd_def_30: 29
combo_def_31: 30
cmd_def_31: 30
combo_def_32: 31
cmd_def_32: 31
combo_def_33: 32
cmd_def_33: 32
combo_def_34: 33
cmd_def_34: 33
combo_def_35: 34
cmd_def_35: 34
combo_def_36: 35
cmd_def_36: 35
combo_def_37: 36
cmd_def_37: 36
combo_def_38: 37
cmd_def_38: 37
combo_def_39: 38
cmd_def_39: 38
combo_def_40: 39
cmd_def_40: 39
combo_def_41: 40
cmd_def_41: 40
combo_def_42: 41
cmd_def_42: 41
combo_def_43: 42
cmd_def_43: 42
combo_def_44: 43
cmd_def_44: 43
combo_def_45: 44
cmd_def_45: 44
combo_def_46: 45
cmd_def_46: 45
combo_def_47: 46
cmd_def_47: 46
combo_def_48: 47
cmd_def_48: 47
combo_def_49: 48
cmd_def_49: 48
combo_def_50: 49
cmd_def_50: 49
combo_def_51: 50
cmd_def_51: 50
combo_def_52: 51
cmd_def_52: 51
combo_def_53: 52
cmd_def_53: 52
combo_def_54: 53
cmd_def_54: 53
combo_def_55: 54
cmd_def_55: 54
combo_def_56: 55
cmd_def_56: 55
combo_def_57: 56
cmd_def_57: 56
combo_def_58: 57
cmd_def_58: 57
combo_def_59: 58
cmd_def_59: 58
combo_def_60: 59
cmd_def_60: 59
set_cmd: INCRV 3,<*>
get_cmd: INCRV? 3
group: Channel 3

[Temperature Coefficient Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 1
cmd_def_2: 2
group: Channel 3

[Excitation Mode Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
group: Channel 3

[Excitation Value Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: 2.00 uV, 1.00 pA
cmd_def_1: 1
combo_def_2: 6.32 uV, 3.16 pA
cmd_def_2: 2
combo_def_3: 20.0 uV, 10.0 pA
cmd_def_3: 3
combo_def_4: 63.2 uV, 31.6 pA
cmd_def_4: 4
combo_def_5: 200 uV, 100 pA
cmd_def_5: 5
combo_def_6: 623 uV, 316 pA
cmd_def_6: 6
combo_def_7: 2.00 mV, 1.00 nA
cmd_def_7: 7
combo_def_8: 6.32 mV, 3.16 nA
cmd_def_8: 8
combo_def_9: 20.0 mV, 10.0 nA
cmd_def_9: 9
combo_def_10: 63.2 mV, 31.6 nA
cmd_def_10: 10
combo_def_11: 200 mV, 100 nA
cmd_def_11: 11
combo_def_12: 632 mV, 316 nA
cmd_def_12: 12
combo_def_13: n/a, 1.00 uA
cmd_def_13: 13
combo_def_14: n/a, 3.16 uA
cmd_def_14: 14
combo_def_15: n/a, 10.0 uA
cmd_def_15: 15
combo_def_16: n/a, 31.6 uA
cmd_def_16: 16
combo_def_17: n/a, 100 uA
cmd_def_17: 17
combo_def_18: n/a, 316 uA
cmd_def_18: 18
combo_def_19: n/a, 1.00 mA
cmd_def_19: 19
combo_def_20: n/a, 3.16 mA
cmd_def_20: 20
combo_def_21: n/a, 10.0 mA
cmd_def_21: 21
combo_def_22: n/a, 31.6 mA
cmd_def_22: 22
group: Channel 3

[Excitation Status Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: On
combo_def_2: Off
cmd_def_1: 0
cmd_def_2: 1
group: Channel 3

[Units Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: Kelvin
combo_def_2: Ohms
cmd_def_1: 1
cmd_def_2: 2
group: Channel 3

[Autorange Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
group: Channel 3

[Range Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: 2.0 mOhm
cmd_def_1: 1
combo_def_2: 6.32 mOhm
cmd_def_2: 2
combo_def_3: 20.0 mOhm
cmd_def_3: 3
combo_def_4: 63.2 mOhm
cmd_def_4: 4
combo_def_5: 200 mOhm
cmd_def_5: 5
combo_def_6: 632 mOhm
cmd_def_6: 6
combo_def_7: 2.0 Ohm
cmd_def_7: 7
combo_def_8: 6.32 Ohm
cmd_def_8: 8
combo_def_9: 20.0 Ohm
cmd_def_9: 9
combo_def_10: 63.2 Ohm
cmd_def_10: 10
combo_def_11: 200 Ohm
cmd_def_11: 11
combo_def_12: 632 Ohm
cmd_def_12: 12
combo_def_13: 2.00 kOhm
cmd_def_13: 13
combo_def_14: 6.32 kOhm
cmd_def_14: 14
combo_def_15: 20.0 kOhm
cmd_def_15: 15
combo_def_16: 63.2 kOhm
cmd_def_16: 16
combo_def_17: 200 kOhm
cmd_def_17: 17
combo_def_18: 632 kOhm
cmd_def_18: 18
combo_def_19: 2.00 MOhm
cmd_def_19: 19
combo_def_20: 6.32 MOhm
cmd_def_20: 20
combo_def_21: 20.0 MOhm
cmd_def_21: 21
combo_def_22: 63.2 MOhm
cmd_def_22: 22
group: Channel 3

[Filter Status Ch_3]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 0
group: Channel 3

[Filter Settle Time Ch_3]
datatype: DOUBLE
unit: seconds
permission: BOTH
low_lim: 0
high_lim: 200
group: Channel 3

[Filter Window Ch_3]
datatype: DOUBLE
unit: percent
permission: BOTH
low_lim: 1
high_lim: 80
group: Channel 3

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

