# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Lakeshore 372AC

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Lakeshore_372_chA



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

model_id_1: MODEL372

model_str_1: Lakeshore 372AC

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

# Use specific TCIPIP socket port
tcpip_specify_port: True

# TCPIP socket port
tcpip_port: 7777

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
# Channel A
[Temperature A]
unit: K
datatype: DOUBLE
permission: READ
get_cmd: KRDG? A
group: Channel A

[Resistance A]
unit: Ohm
datatype: DOUBLE
permission: READ
get_cmd: SRDG? A
group: Channel A

[Power A]
unit: W
datatype: DOUBLE
permission: READ
get_cmd: RDGPWR? A
group: Channel A

[Quadrature A]
unit: Ohms
datatype: DOUBLE
permission: READ
get_cmd: QRDG? A
group: Channel A

[Frequency A]
datatype: COMBO
combo_def_1: 9.8 Hz
combo_def_2: 13.7 Hz
combo_def_3: 16.2 Hz
combo_def_4: 11.6 Hz
combo_def_5: 18.2 Hz
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
set_cmd: FREQ A,<*>
get_cmd: FREQ? A
group: Channel A

[Channel]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
cmd_def_9: 9
cmd_def_10: 10
cmd_def_11: 11
cmd_def_12: 12
cmd_def_13: 13
cmd_def_14: 14
cmd_def_15: 15
cmd_def_16: 16
group: Current channel

# Channel
[Temperature]
unit: K
datatype: DOUBLE
permission: READ
group: Current channel

[Resistance]
unit: Ohm
datatype: DOUBLE
permission: READ
group: Current channel

[Power]
unit: W
datatype: DOUBLE
permission: READ
group: Current channel

[Quadrature]
unit: Ohms
datatype: DOUBLE
permission: READ
group: Current channel

[Frequency]
datatype: COMBO
combo_def_1: 9.8 Hz
combo_def_2: 13.7 Hz
combo_def_3: 16.2 Hz
combo_def_4: 11.6 Hz
combo_def_5: 18.2 Hz
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
group: Current channel