# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford Research SIM 921 AC Bridge

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SIM921_Driver

interface: None
address: SIM921
startup: Do nothing



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

# Serial port baud rate
# baud_rate: 115200

term_char: CR+LF

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
[Temperature]
datatype: DOUBLE
unit: Kelvin
permission: READ
get_cmd: TVAL?
group: Measurements

[Resistance]
datatype: DOUBLE
unit: Ohms
permission: READ
get_cmd: RVAL?
group: Measurements

[Voltage]
datatype: DOUBLE
unit: volts
permission: READ
get_cmd: VEXC?
group: Measurements

[Current]
datatype: DOUBLE
unit: amps
permission: READ
get_cmd: IEXC?
group: Measurements

[Phase]
datatype: DOUBLE
permission: READ
get_cmd: PHAS?
group: Measurements

[Excitation Status]
datatype: COMBO
permission: BOTH
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: EXON <*>
get_cmd: EXON?
group: Settings

[Excitation Frequency]
datatype: DOUBLE
unit: Hz
permission: BOTH
set_cmd: FREQ <*>
get_cmd: FREQ?
low_lim: 1.95
high_lim: 61.1
group: Settings

[Excitation Voltage]
datatype: COMBO
unit: volts
permission: BOTH
combo_def_1: 3E-6
combo_def_2: 10E-6
combo_def_3: 30E-6
combo_def_4: 100E-6
combo_def_5: 300E-6
combo_def_6: 1E-3
combo_def_7: 3E-3
combo_def_8: 10E-3
combo_def_9: 30E-3
combo_def_10: Off
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: -1
set_cmd: EXCI <*>
get_cmd: EXCI?
group: Settings

[Excitation Mode]
datatype: COMBO
permission: BOTH
combo_def_1: Passive
combo_def_2: Current
combo_def_3: Voltage
combo_def_4: Power
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
set_cmd: MODE <*>
get_cmd: MODE?
group: Settings

[Resistance Range]
datatype: COMBO
unit: Ohms
permission: BOTH
combo_def_1: 0.02
combo_def_2: 0.2
combo_def_3: 2
combo_def_4: 20
combo_def_5: 200
combo_def_6: 2E3
combo_def_7: 20E3
combo_def_8: 200E3
combo_def_9: 2E6
combo_def_10: 20E6
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
set_cmd: RANG <*>
get_cmd: RANG?
group: Settings

[Time Constant]
datatype: COMBO
unit: seconds
permission: BOTH
combo_def_1: 0.3
combo_def_2: 1
combo_def_3: 3
combo_def_4: 10
combo_def_5: 30
combo_def_6: 100
combo_def_7: 300
combo_def_8: Off
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: -1
set_cmd: TCON <*>
get_cmd: TCON?
group: Settings

[Calibration Curve]
datatype: COMBO
permission: BOTH
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
set_cmd: CURV <*>
get_cmd: CURV?
group: Settings

[Autorange Gain]
datatype: BUTTON
set_cmd: AGAI 1
group: Actions

[Reset Filter]
datatype: BUTTON
set_cmd: FRST
group: Actions