# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford Research SIM 922 Diode Reader

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SIM922_Driver

interface: None
address: SIM922
startup: Do nothing



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

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
[Ch1 Temperature]
datatype: DOUBLE
permission: READ
get_cmd: TVAL? 1
group: Channel 1

[Ch1 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 1
group: Channel 1

[Ch1 Excitation]
datatype: COMBO
permission: BOTH
combo_def_1: OFF
combo_def_2: ON
cmd_def_1: 0
cmd_def_2: 1
get_cmd: EXON? 1
set_cmd: EXON 1, <*>
group: Channel 1

[Ch1 Sensor Curve]
datatype: COMBO
permission: BOTH
combo_def_1: Standard
combo_def_2: User
cmd_def_1: 0
cmd_def_2: 1
set_cmd: CURV 1, <*>
get_cmd: CURV? 1
group: Channel 1

[Ch2 Temperature]
datatype: DOUBLE
permission: READ
get_cmd: TVAL? 2
group: Channel 2

[Ch2 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 2
group: Channel 2

[Ch2 Excitation]
datatype: COMBO
permission: BOTH
combo_def_1: OFF
combo_def_2: ON
cmd_def_1: 0
cmd_def_2: 1
get_cmd: EXON? 2
set_cmd: EXON 2, <*>
group: Channel 2

[Ch2 Sensor Curve]
datatype: COMBO
permission: BOTH
combo_def_1: Standard
combo_def_2: User
cmd_def_1: 0
cmd_def_2: 1
set_cmd: CURV 2, <*>
get_cmd: CURV? 2
group: Channel 2

[Ch3 Temperature]
datatype: DOUBLE
permission: READ
get_cmd: TVAL? 3
group: Channel 3

[Ch3 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 3
group: Channel 3

[Ch3 Excitation]
datatype: COMBO
permission: BOTH
combo_def_1: OFF
combo_def_2: ON
cmd_def_1: 0
cmd_def_2: 1
get_cmd: EXON? 3
set_cmd: EXON 3, <*>
group: Channel 3

[Ch3 Sensor Curve]
datatype: COMBO
permission: BOTH
combo_def_1: Standard
combo_def_2: User
cmd_def_1: 0
cmd_def_2: 1
set_cmd: CURV 3, <*>
get_cmd: CURV? 3
group: Channel 3

[Ch4 Temperature]
datatype: DOUBLE
permission: READ
get_cmd: TVAL? 4
group: Channel 4

[Ch4 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 4
group: Channel 4

[Ch4 Excitation]
datatype: COMBO
permission: BOTH
combo_def_1: OFF
combo_def_2: ON
cmd_def_1: 0
cmd_def_2: 1
get_cmd: EXON? 4
set_cmd: EXON 4, <*>
group: Channel 4

[Ch4 Sensor Curve]
datatype: COMBO
permission: BOTH
combo_def_1: Standard
combo_def_2: User
cmd_def_1: 0
cmd_def_2: 1
set_cmd: CURV 4, <*>
get_cmd: CURV? 4
group: Channel 4

[Power Line Frequency]
datatype: COMBO
permission: BOTH
combo_def_1: 50 Hz
combo_def_2: 60 Hz
cmd_def_1: 50
cmd_def_2: 60
set_cmd: FPLC <*>
get_cmd: FPLC?
group: Common Settings

