# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford Research SIM 925 Octal Four-Wire Multiplexer

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SIM925_Driver

interface: None
address: SIM925
startup: Do nothing



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

# Serial port baud rate
# baud_rate: 115200

term_char: CR+LF

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
[Channel]
datatype: COMBO
permission: BOTH
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: All off
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
cmd_def_9: 0
set_cmd: CHAN <*>
get_cmd: CHAN?

[Mode]
datatype: COMBO
permission: BOTH
combo_def_1: Make Before Break
combo_def_2: Break Before Make
cmd_def_1: 0
cmd_def_2: 1
set_cmd: MODE <*>
get_cmd: MODE?
