# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford Research SIM 970 Voltmeter

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SIM970_Driver

interface: None
address: SIM970
startup: Do nothing



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

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
[Ch1 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 1
group: Channel 1

[Ch2 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 2
group: Channel 2

[Ch3 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 3
group: Channel 3

[Ch4 Voltage]
datatype: DOUBLE
permission: READ
get_cmd: VOLT? 4
group: Channel 4

